<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" Selector="RootPath" />
                <Property Name="SessionName" Selector="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder />
              <SessionName xsi:nil="true" />
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>BehaviorVideos</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Modality" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p1:AppendModalitySuffix,sys:Nullable(p1:Modality)">
                    <MemberName>Modality</MemberName>
                    <Value>BehaviorVideos</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.VideoWriter</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="p2:MatchVideoWriter">
                    <p2:Type xsi:type="TypeMapping" TypeArguments="p2:VideoWriterFfmpeg" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>FfmpegWriter</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisCameraName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggeredCamerasStream</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCameraName</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCameraName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LogName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ContainerExtension</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="VideoExtension" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OutputArguments" Selector="OutputArguments" />
                            <Property Name="InputArguments" Selector="InputArguments" />
                            <Property Name="FrameRate" Selector="FrameRate" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSpinnakerFfmpeg.bonsai">
                          <Modality>BehaviorVideos</Modality>
                          <LogName>FaceCamera</LogName>
                          <VideoExtension>mp4</VideoExtension>
                          <OutputArguments>-vf "scale=out_color_matrix=bt709:out_range=full" -c:v h264_nvenc -pix_fmt nv12 -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -maxrate 700M -bufsize 350M</OutputArguments>
                          <InputArguments>-colorspace rgb -color_primaries bt709 -color_trc linear</InputArguments>
                          <Verbosity>Warning</Verbosity>
                          <FrameRate>0</FrameRate>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="22" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="22" Label="Source2" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="22" Label="Source3" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="22" Label="Source4" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source5" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.VideoWriter</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="p2:MatchVideoWriter">
                    <p2:Type xsi:type="TypeMapping" TypeArguments="p2:VideoWriterOpenCv" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OpenCvWriter</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisCameraName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggeredCamerasStream</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCameraName</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCameraName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LogName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ContainerExtension</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="VideoExtension" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FrameRate" Selector="FrameRate" />
                            <Property Name="FourCC" Selector="FourCC" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSpinnakerOpenCv.bonsai">
                          <Modality>BehaviorVideos</Modality>
                          <LogName>FaceCamera</LogName>
                          <VideoExtension>mp4</VideoExtension>
                          <FrameRate>30</FrameRate>
                          <FourCC>FMP4</FourCC>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="22" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="22" Label="Source2" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="22" Label="Source3" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="22" Label="Source4" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source5" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="10" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="16" To="20" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="21" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>