WorkflowBuilder(Version=2.9.1)
GroupWorkflow ImGuiContext
    Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder => #0
    -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
    -> PublishSubject Frame
    -> WorkflowOutput
    #0 -> Bonsai.Design.VisualizerWindow(Visible=true, Location=nil, Size=nil, WindowState=nil)

GroupWorkflow DataTransformations
    SubscribeSubject GlobalTrialOutcome
    -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> BehaviorSubject TimedTrial

    SubscribeSubject GlobalTrialMetrics
    -> MemberSelector(Selector=Bias) => #4
    SubscribeSubject TrialIndex => #5
    #4, #5 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it.Item1 as Bias, it.Item2 as TrialIndex)
    -> BehaviorSubject TrialIndexedBias

    SubscribeSubject IsRightLickEvent
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject LickRight

    SubscribeSubject IsRightLickEvent
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> BitwiseNot
        -> WorkflowOutput
    -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject LickLeft

    SubscribeSubject GlobalTrial
    -> MemberSelector(Selector=IsAutoRewardRight)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #19
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> BitwiseNot
        -> WorkflowOutput
    -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject AutoRewardLeft
    #19 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject AutoRewardRight

    SubscribeSubject GlobalTrial
    -> MemberSelector(Selector=LickspoutOffsetDelta)
    -> Condition NotZero => #28
        WorkflowInput Source1
        -> Equal(Operand=DoubleProperty(Value=0))
        -> BitwiseNot
        -> WorkflowOutput
    -> Condition MoveRight
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject LeftBiasCorrection
    #28 -> Condition MoveLeft
        WorkflowInput Source1
        -> LessThan(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject RightBiasCorrection

    SubscribeSubject SoftwareEvent => #35
    SubscribeSubject IsRightLickEvent
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickRight) => #38
    SubscribeSubject IsRightLickEvent
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickLeft) => #41
    SubscribeSubject GiveRewardRight
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterRight) => #44
    SubscribeSubject GiveRewardRight
    -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterLeft) => #48
    #35, #38, #41, #44, #48 -> Merge
    -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
    -> Timestamp
    -> AllenNeuralDynamics.Core.Design.AccumulateToImmutableList
    -> BehaviorSubject EthogramEvents

GroupWorkflow OutputControl
    GroupWorkflow Manipulator
        PublishSubject<System.Reactive.Unit> UiManipulatorLeft
        -> Sink MoveRelative
            WorkflowInput Source1
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=1, Y1=0, Y2=0, Z=0) => #1
            SubscribeSubject OffsetGain => #2
            #1, #2 -> WithLatestFrom
            -> Multiply
            -> MulticastSubject MoveBy
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiManipulatorRight
        -> Sink MoveRelative
            WorkflowInput Source1
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=-1, Y1=0, Y2=0, Z=0) => #1
            SubscribeSubject OffsetGain => #2
            #1, #2 -> WithLatestFrom
            -> Multiply
            -> MulticastSubject MoveBy
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiManipulatorForwardLeft
        -> Sink MoveRelative
            WorkflowInput Source1
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=1, Z=0) => #1
            SubscribeSubject OffsetGain => #2
            #1, #2 -> WithLatestFrom
            -> Multiply
            -> MulticastSubject MoveBy
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiManipulatorForwardRight
        -> Sink MoveRelative
            WorkflowInput Source1
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=1, Y2=0, Z=0) => #1
            SubscribeSubject OffsetGain => #2
            #1, #2 -> WithLatestFrom
            -> Multiply
            -> MulticastSubject MoveBy
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiManipulatorBackLeft
        -> Sink MoveRelative
            WorkflowInput Source1
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=-1, Z=0) => #1
            SubscribeSubject OffsetGain => #2
            #1, #2 -> WithLatestFrom
            -> Multiply
            -> MulticastSubject MoveBy
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiManipulatorBackRight
        -> Sink MoveRelative
            WorkflowInput Source1
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=-1, Y2=0, Z=0) => #1
            SubscribeSubject OffsetGain => #2
            #1, #2 -> WithLatestFrom
            -> Multiply
            -> MulticastSubject MoveBy
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiManipulatorUp
        -> Sink MoveRelative
            WorkflowInput Source1
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=1) => #1
            SubscribeSubject OffsetGain => #2
            #1, #2 -> WithLatestFrom
            -> Multiply
            -> MulticastSubject MoveBy
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiManipulatorDown
        -> Sink MoveRelative
            WorkflowInput Source1
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=-1) => #1
            SubscribeSubject OffsetGain => #2
            #1, #2 -> WithLatestFrom
            -> Multiply
            -> MulticastSubject MoveBy
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiManipulatorHome
        -> Sink Home
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject HomeMotors
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiManipulatorStop
        -> Sink StopMotors
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject StopMotors
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiManipulatorInitialize
        -> Sink GoToInitialPosition
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject GoToInitialPosition
            -> WorkflowOutput

        BehaviorSubject<System.Single> OffsetGain

    PublishSubject<System.Single> UiHabituationTimeUpdate

    DoubleProperty(Value=0.05)
    -> Take(Count=1)
    -> BehaviorSubject BumpSize

    PublishSubject<System.Reactive.Unit> UiMoveLeft
    -> Sink BumpLeft
        WorkflowInput Source1 => #0
        SubscribeSubject BumpSize => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject ManualSpoutDelta
        -> WorkflowOutput

    PublishSubject<System.Reactive.Unit> UiMoveRight
    -> Sink BumpRight
        WorkflowInput Source1 => #0
        SubscribeSubject BumpSize => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Multiply(Operand=DoubleProperty(Value=-1))
        -> MulticastSubject ManualSpoutDelta
        -> WorkflowOutput

    PublishSubject<System.Reactive.Unit> UiGiveRight
    -> Sink TriggerRight
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> MulticastSubject GiveRewardRight
        -> WorkflowOutput

    PublishSubject<System.Reactive.Unit> UiGiveLeft
    -> Sink TriggerLeft
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject GiveRewardRight
        -> WorkflowOutput

    PublishSubject<System.Reactive.Unit> UiCueGiveLeft
    -> Sink UpdateGlobalState
        WorkflowInput Source1 => #0
        SubscribeSubject GlobalAutoWaterState => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        ExternalizedMapping(Expression) => #4
        #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.SetLeft()
        -> MulticastSubject GlobalAutoWaterState
        -> WorkflowOutput

    PublishSubject<System.Reactive.Unit> UiCueGiveRight
    -> Sink UpdateGlobalState
        WorkflowInput Source1 => #0
        SubscribeSubject GlobalAutoWaterState => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        ExternalizedMapping(Expression) => #4
        #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.SetRight()
        -> MulticastSubject GlobalAutoWaterState
        -> WorkflowOutput

    BooleanProperty(Value=true)
    -> MulticastSubject IsFlushingValveLeft

    SubscribeSubject UiCueGiveLeft
    -> Unit
    -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=LeftManualAutoReward)

    SubscribeSubject UiCueGiveRight
    -> Unit
    -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=RightManualAutoReward)

    SubscribeSubject UiGiveRight
    -> Unit
    -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=RightManualWater)

    SubscribeSubject UiGiveLeft
    -> Unit
    -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=LeftManualWater)

    BehaviorSubject<System.Boolean> IsFlushingValveLeft
    BehaviorSubject<System.Boolean> IsFlushingValveRight

    PublishSubject<System.Boolean> UiKeepLeftOpen => #33
    PublishSubject<System.Boolean> UiKeepBothOpen => #34
    #33, #34 -> Merge
    -> CreateObservable KeepLeftOpen
        DoubleProperty(Value=50)
        -> Take(Count=1)
        -> AsyncSubject DefaultRewardAmount

        WorkflowInput Source1
        -> BitwiseNot
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        Timer(DueTime=PT0.1S) => #6
        ExternalizedMapping(Value(DisplayName=IsRight)) => #7
        #6, #7 -> BooleanProperty(Value=false) => #8
        SubscribeSubject DefaultRewardAmount => #9
        #8, #9 -> WithLatestFrom
        -> MulticastSubject SetIsRightRewardAmount
        -> Delay(DueTime=PT0.02S)
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject GiveRewardRight
        -> Delay(DueTime=PT0.5S)
        -> Repeat
        -> LastOrDefault => #17
        #5, #17 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Switch
    PublishSubject<System.Boolean> UiKeepRightOpen => #38
    #38, #34 -> Merge
    -> CreateObservable KeepRightOpen
        DoubleProperty(Value=50)
        -> Take(Count=1)
        -> AsyncSubject DefaultRewardAmount

        WorkflowInput Source1
        -> BitwiseNot
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        Timer(DueTime=PT0.1S) => #6
        ExternalizedMapping(Value(DisplayName=IsRight)) => #7
        #6, #7 -> BooleanProperty(Value=true) => #8
        SubscribeSubject DefaultRewardAmount => #9
        #8, #9 -> WithLatestFrom
        -> MulticastSubject SetIsRightRewardAmount
        -> Delay(DueTime=PT0.02S)
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject GiveRewardRight
        -> Delay(DueTime=PT0.5S)
        -> Repeat
        -> LastOrDefault => #17
        #5, #17 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Switch

    PublishSubject<System.Boolean> UiDrainLeft => #42
    PublishSubject<System.Boolean> UiDrainBoth => #43
    #42, #43 -> Merge
    -> CreateObservable FlushLeft
        DoubleProperty(Value=50)
        -> Take(Count=1)
        -> AsyncSubject DefaultVolume

        WorkflowInput Source1
        -> BitwiseNot
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        Timer(DueTime=PT0.1S) => #6
        ExternalizedMapping(Value(DisplayName=IsRight)) => #7
        #6, #7 -> BooleanProperty(Value=false) => #8
        SubscribeSubject DefaultVolume => #9
        #8, #9 -> WithLatestFrom
        -> MulticastSubject SetIsRightRewardAmount
        -> Delay(DueTime=PT0.02S)
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject GiveRewardRight => #14
        SubscribeSubject DefaultVolume => #15
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValveLeft) => #17
        #15, #17 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime) => #21
        #14, #21 -> Delay(DueTime=PT1.288S) => #22
        SubscribeSubject DefaultVolume
        -> Bonsai.Scripting.Expressions.ExpressionTransform DivideByEachOpen
          Expression: Math.Ceiling(5000 / it)
        -> PropertyMapping(Count) => #25
        #22, #25 -> RepeatCount(Count=100)
        -> LastOrDefault
        -> BooleanProperty(Value=false)
        -> MulticastSubject IsFlushingValveLeft => #29
        #5, #29 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Switch
    -> PublishSubject DrainLeftComplete
    PublishSubject<System.Boolean> UiDrainRight => #48
    #48, #43 -> Merge
    -> CreateObservable FlushRight
        DoubleProperty(Value=50)
        -> Take(Count=1)
        -> AsyncSubject DefaultVolume

        WorkflowInput Source1
        -> BitwiseNot
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        Timer(DueTime=PT0.1S) => #6
        ExternalizedMapping(Value(DisplayName=IsRight)) => #7
        #6, #7 -> BooleanProperty(Value=true) => #8
        SubscribeSubject DefaultVolume => #9
        #8, #9 -> WithLatestFrom
        -> MulticastSubject SetIsRightRewardAmount
        -> Delay(DueTime=PT0.02S)
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject GiveRewardRight => #14
        SubscribeSubject DefaultVolume => #15
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValveRight) => #17
        #15, #17 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime) => #21
        #14, #21 -> Delay(DueTime=PT0.888S) => #22
        SubscribeSubject DefaultVolume
        -> Bonsai.Scripting.Expressions.ExpressionTransform DivideByEachOpen
          Expression: Math.Ceiling(5000 / it)
        -> PropertyMapping(Count) => #25
        #22, #25 -> RepeatCount(Count=100)
        -> LastOrDefault
        -> BooleanProperty(Value=false)
        -> MulticastSubject IsFlushingValveRight => #29
        #5, #29 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Switch
    -> PublishSubject DrainRightComplete

GroupWorkflow VisualizerStructure
    ExternalizedMapping(Name(DisplayName=FrameSubject))
    -> SubscribeSubject Frame => #1
    -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> TableBuilder => #3
      Visible=true
      Columns(ColumnStyling(Name=Ethograph, Flags=WidthStretch, InitValue=0), ColumnStyling(Name=Camera, Flags=WidthFixed, InitValue=320))
      Flags="BordersInnerH BordersOuterH BordersInnerV BordersOuterV BordersH BordersV BordersInner BordersOuter Borders SizingFixedFit"
      OuterSize(X=0, Y=0)
      InnerWidth=0
      ShowHeadersRow=true
    -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #5
    -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> PublishSubject Behavior => #7
    #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> PublishSubject Bias => #9
    #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> PublishSubject Ethogram => #11
    #7, #9, #11 -> Zip => #12
    #3 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> PublishSubject Camera => #14
    #12, #14 -> Zip
    #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=Borders, OuterSize(X=0, Y=0), InnerWidth=0)
    -> PublishSubject Metadata => #18
    #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> Bonsai.ImGui.TabBarBuilder(Visible=true, Flags=None) => #20
    -> Bonsai.ImGui.TabItemBuilder PreSession(Visible=true, Text=pre-session, Flags=None)
    -> PublishSubject PreSession => #22
    #20 -> Bonsai.ImGui.TabItemBuilder IntraSession(Visible=true, Text=intra-session, Flags=None)
    -> PublishSubject IntraSession => #24
    #18, #22, #24 -> Zip

GroupWorkflow SessionInfo
    SubscribeSubject TimedTrial
    -> MemberSelector(Selector=Value.Trial.Metadata.Extra)
    -> BehaviorSubject SessionMetadata
    -> WorkflowOutput

Defer BehaviorVisualizer
    IncludeWorkflow
      Path=Extensions\BehaviorVisualizer.bonsai
      PlotName=Behavior1
      LickLeftSubject=LickLeft
      LickRightSubject=LickRight
      TrialSubject=TimedTrial
      FrameSubject=Behavior
      AutoRewardRightSubject=AutoRewardRight
      AutoRewardLeftSubject=AutoRewardLeft
    -> WorkflowOutput

Defer BiasVisualizer
    IncludeWorkflow
      Path=Extensions\BiasVisualizer.bonsai
      FrameSubject=Bias
      TimedBias=TrialIndexedBias
      LeftBiasCorrectionSubject=LeftBiasCorrection
      RightBiasCorrectionSubject=RightBiasCorrection
    -> WorkflowOutput

SubscribeSubject Ethogram => #7
SubscribeSubject EthogramEvents
-> PropertyMapping(SoftwareEvents) => #9
#7, #9 -> SoftwareEventVisualizer
  Visible=true
  SoftwareEvents=""
  TrialBreakEventName=Break
  PlotHeight=200
  ShadedAreaPlotters
    ShadedAreaPlotter(EventName=QuiescentPeriod, Color=Gold, Alpha=0.3)
    ShadedAreaPlotter(EventName=ResponsePeriod, Color=SandyBrown, Alpha=0.3)
    ShadedAreaPlotter(EventName=RewardConsumptionPeriod, Color=RosyBrown, Alpha=0.3)
    ShadedAreaPlotter(EventName=ItiPeriod, Color=Green, Alpha=0.3)
  PointPlotters
    PointPlotter(EventName=LickLeft, Color=Red, YPosition=0.9, MarkerSize=6, Marker=Down)
    PointPlotter(EventName=LickRight, Color=Blue, YPosition=0.1, MarkerSize=6, Marker=Up)
    PointPlotter(EventName=IsRightTriggerQuickRetract, Color=DarkCyan, YPosition=0.5, MarkerSize=6, Marker=Plus)
    PointPlotter(EventName=DeliverSecondaryReinforcer, Color=Sienna, YPosition=0.5, MarkerSize=6, Marker=Plus)
    PointPlotter(EventName=WaterRight, Color=Red, YPosition=0.2, MarkerSize=6, Marker=Circle)
    PointPlotter(EventName=WaterLeft, Color=Blue, YPosition=0.8, MarkerSize=6, Marker=Circle)

Unit => #11
-> IncludeWorkflow
  Path=Extensions\CameraPreviewVisualizer.bonsai
  FrameSubject=Camera
  CameraName=BodyCamera
  MinSaturation=0.1
  MaxSaturation=0.9
  FlipState=1
  Rotation=0
  TriggeredCamerasStream=TriggeredCamerasStream
#11 -> IncludeWorkflow
  Path=Extensions\CameraPreviewVisualizer.bonsai
  FrameSubject=Camera
  CameraName=SideCamera
  MinSaturation=0.1
  MaxSaturation=0.9
  FlipState=2
  Rotation=0
  TriggeredCamerasStream=TriggeredCamerasStream

SubscribeSubject SessionSchema => #14
SubscribeSubject TaskLogicSchema => #15
#14, #15 -> WithLatestFrom
-> Defer MetadataVisualizer
    WorkflowInput Source1
    -> IncludeWorkflow
      Path=Extensions\MetadataVisualizer.bonsai
      FrameSubject=Metadata
      StartExperimentSubject=StartExperimentShortcut
      UiHabituationTimeUpdate=UiHabituationTimeUpdate
    -> WorkflowOutput

Defer PreSessionVisualizer
    IncludeWorkflow
      Path=Extensions\PreSessionVisualizer.bonsai
      FrameSubject=PreSession
      UiKeepLeftOpne=UiKeepLeftOpen
      UiKeepRightOpen=UiKeepRightOpen
      UiKeepBothOpen=UiKeepBothOpen
      UiDrainLeft=UiDrainLeft
      UiDrainRight=UiDrainRight
      UiDrainBoth=UiDrainBoth
      UiManipulatorLeft=UiManipulatorLeft
      UiManipulatorForwardLeft=UiManipulatorForwardLeft
      UiManipulatorForwardRight=UiManipulatorForwardRight
      UiManipulatorUp=UiManipulatorUp
      UiManipulatorRight=UiManipulatorRight
      UiManipulatorBackLeft=UiManipulatorBackLeft
      UiManipulatorBackRight=UiManipulatorBackRight
      UiManipulatorDown=UiManipulatorDown
      UiManipulatorStop=UiManipulatorStop
      UiManipulatorHome=UiManipulatorHome
      UiControlManipulator=UiManipulatorInitialize
      DrainLeftComplete=DrainLeftComplete
      DrainRightComplete=DrainRightComplete
    -> WorkflowOutput

Defer IntraSessionVisualizer
    IncludeWorkflow
      Path=Extensions\IntraSessionVisualizer.bonsai
      FrameSubject=IntraSession
      UiGiveLeft=UiGiveLeft
      UiGiveRight=UiGiveRight
      UiMoveLeft=UiMoveLeft
      UiMoveRight=UiMoveRight
      StartExperimentSubject=StartExperiment
      UiCueGiveLeft=UiCueGiveLeft
      UiCueGiveRight=UiCueGiveRight
      SessionMetadataSubject=SessionMetadata
    -> WorkflowOutput
