<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns:imvizui="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers.Design"
                 xmlns:imgui="clr-namespace:Bonsai.ImGui;assembly=Bonsai.ImGui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" DisplayName="TaskPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\git\Aind.Behavior.DynamicForaging\local\DynamicForaging_AindDynamicForagingTaskLogic.json</TaskLogicPath>
        <RigPath>c:\git\Aind.Behavior.DynamicForaging\local\AindDynamicForagingRig.json</RigPath>
        <SessionPath>c:\git\Aind.Behavior.DynamicForaging\local\Session.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Session" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:CreateRuntime">
                <py:PythonHome>../.venv</py:PythonHome>
                <py:ScriptPath>./Extensions\bonsai.py</py:ScriptPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsWaveformUploadDone</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateAutoWaterState">
                <p2:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>GlobalAutoWaterState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialOutcome">
              <rx:Name>GlobalTrialOutcome</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Trial">
              <rx:Name>GlobalTrial</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialMetrics">
              <rx:Name>GlobalTrialMetrics</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>-5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BiasOffsetBounds</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="28" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="28" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source3" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="32" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartupLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>IsWaveformUploadDone</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name />
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Hardware.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OperationControl.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TaskEngine.bonsai" />
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Name>isNull</scr:Name>
        <scr:Expression>it == null</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualizers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Visualizer">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ui:VisualizerWindow">
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              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ImGuiContext</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="imvizui:ImPlotVisualizerBuilder" />
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>1</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DataTransformations</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GlobalTrialOutcome</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TimedTrial</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GlobalTrialMetrics</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Bias</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new (it as Bias)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TimedBias</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightLickEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickRight</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightLickEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickLeft</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightLickEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:CreateSoftwareEvent">
                      <p5:EventName>LickRight</p5:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightLickEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:CreateSoftwareEvent">
                      <p5:EventName>LickLeft</p5:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GiveRewardRight</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:CreateSoftwareEvent">
                      <p5:EventName>WaterRight</p5:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GiveRewardRight</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:CreateSoftwareEvent">
                      <p5:EventName>WaterLeft</p5:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:TimestampSoftwareEvent" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:AccumulateToImmutableList" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>EthogramEvents</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="30" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="30" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="30" Label="Source3" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="30" Label="Source4" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source5" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>OutputControl</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Single">
                    <rx:Name>UiHabituationTimeUpdate</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiMoveLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiGiveRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiGiveLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiMoveRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiKeepLeftOpen</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiKeepRightOpen</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiKeepBothOpen</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiDrainLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiDrainRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiDrainBoth</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorForwardLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorForwardRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorUp</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorBackRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorBackLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorDown</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorStop</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorHome</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorInitialize</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiCueGiveRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiCueGiveLeft</rx:Name>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VisualizerStructure</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="FrameSubject" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>2</imgui:Columns>
                    <imgui:Flags>Borders</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>1</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Behavior</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Bias</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Ethogram</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Camera</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>1</imgui:Columns>
                    <imgui:Flags>Borders</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Metadata</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TabBarBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="imgui:TabItemBuilder">
                    <imgui:Name>PreSession</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>pre-session</imgui:Text>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>PreSession</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TabItemBuilder">
                    <imgui:Name>InterSession</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>inter-session</imgui:Text>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>InterSession</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="16" Label="Source1" />
                  <Edge From="1" To="19" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="13" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="5" To="10" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="12" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="12" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source3" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="25" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="20" To="23" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="25" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source3" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BehaviorVisualizer.bonsai">
              <PlotName>Behavior1</PlotName>
              <LickLeftSubject>LickLeft</LickLeftSubject>
              <LickRightSubject>LickRight</LickRightSubject>
              <TrialSubject>TimedTrial</TrialSubject>
              <FrameSubject>Behavior</FrameSubject>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BiasVisualizer.bonsai">
              <FrameSubject>Bias</FrameSubject>
              <TimedBias>TimedBias</TimedBias>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Ethogram</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EthogramEvents</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SoftwareEvents" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:SoftwareEventVisualizer">
                <p2:Visible>true</p2:Visible>
                <p2:SoftwareEvents />
                <p2:TrialBreakEventName>Break</p2:TrialBreakEventName>
                <p2:PlotHeight>200</p2:PlotHeight>
                <p2:ShadedAreaPlotters>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>QuiescentPeriod</p2:EventName>
                    <p2:Color>Gold</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>ResponsePeriod</p2:EventName>
                    <p2:Color>SandyBrown</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>RewardConsumptionPeriod</p2:EventName>
                    <p2:Color>RosyBrown</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>ItiPeriod</p2:EventName>
                    <p2:Color>Green</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                </p2:ShadedAreaPlotters>
                <p2:PointPlotters>
                  <p2:PointPlotter>
                    <p2:EventName>LickLeft</p2:EventName>
                    <p2:Color>Red</p2:Color>
                    <p2:YPosition>0.9</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Down</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>LickRight</p2:EventName>
                    <p2:Color>Blue</p2:Color>
                    <p2:YPosition>0.1</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Up</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>IsRightTriggerQuickRetract</p2:EventName>
                    <p2:Color>DarkCyan</p2:Color>
                    <p2:YPosition>0.5</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Plus</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>DeliverSecondaryReinforcer</p2:EventName>
                    <p2:Color>Sienna</p2:Color>
                    <p2:YPosition>0.5</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Plus</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>WaterRight</p2:EventName>
                    <p2:Color>Blue</p2:Color>
                    <p2:YPosition>0.2</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Circle</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>WaterLft</p2:EventName>
                    <p2:Color>Red</p2:Color>
                    <p2:YPosition>0.8</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Circle</p2:Marker>
                  </p2:PointPlotter>
                </p2:PointPlotters>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasStream</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraPreviewVisualizer.bonsai">
              <FrameSubject>Camera</FrameSubject>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraPreviewVisualizer.bonsai">
              <FrameSubject>Camera</FrameSubject>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\MetadataVisualizer.bonsai">
              <FrameSubject>Metadata</FrameSubject>
              <StartExperimentSubject>StartExperimentShortcut</StartExperimentSubject>
              <EndExperimentSubject>EndExperiment</EndExperimentSubject>
              <UiHabituationTimeUpdate>UiHabituationTimeUpdate</UiHabituationTimeUpdate>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PreSessionVisualizer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FrameSubject" />
                    <Property Name="UiKeepLeftOpne" />
                    <Property Name="UiKeepRightOpen" />
                    <Property Name="UiKeepBothOpen" />
                    <Property Name="UiDrainLeft" />
                    <Property Name="UiDrainRight" />
                    <Property Name="UiDrainBoth" />
                    <Property Name="UiManipulatorLeft" />
                    <Property Name="UiManipulatorForwardLeft" />
                    <Property Name="UiManipulatorForwardRight" />
                    <Property Name="UiManipulatorUp" />
                    <Property Name="UiManipulatorRight" />
                    <Property Name="UiManipulatorBackLeft" />
                    <Property Name="UiManipulatorBackRight" />
                    <Property Name="UiManipulatorDown" />
                    <Property Name="UiManipulatorStop" />
                    <Property Name="UiManipulatorHome" />
                    <Property Name="UiControlManipulator" />
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>PreSessionVisualizer</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="FrameSubject" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PreSession</Name>
                        </Expression>
                        <Expression xsi:type="imgui:TableBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Columns>2</imgui:Columns>
                          <imgui:Flags>Borders</imgui:Flags>
                          <imgui:OuterSize>
                            <imgui:X>0</imgui:X>
                            <imgui:Y>0</imgui:Y>
                          </imgui:OuterSize>
                          <imgui:InnerWidth>0</imgui:InnerWidth>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TableBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Columns>2</imgui:Columns>
                          <imgui:Flags>None</imgui:Flags>
                          <imgui:OuterSize>
                            <imgui:X>0</imgui:X>
                            <imgui:Y>0</imgui:Y>
                          </imgui:OuterSize>
                          <imgui:InnerWidth>0</imgui:InnerWidth>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>KeepLeftOpen</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Keep Left Open</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiKeepLeftOpne" Category="UiControlValve" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiKeepLeftOpen</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>KeepRightOpen</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Keep Right Open</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiKeepRightOpen" Category="UiControlValve" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiKeepRightOpen</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>KeepBothOpen</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Keep Both Open</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiKeepBothOpen" Category="UiControlValve" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiKeepBothOpen</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>DrainLeft</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Drain 5ml Left</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiDrainLeft" Category="UiControlValve" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiDrainLeft</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>Drain Right</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Drain 5ml Right</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiDrainRight" Category="UiControlValve" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiDrainRight</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>Drain Both</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Drain 5ml Both</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiDrainBoth" Category="UiControlValve" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiDrainBoth</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TableBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Columns>2</imgui:Columns>
                          <imgui:Flags>Borders</imgui:Flags>
                          <imgui:OuterSize>
                            <imgui:X>0</imgui:X>
                            <imgui:Y>0</imgui:Y>
                          </imgui:OuterSize>
                          <imgui:InnerWidth>0</imgui:InnerWidth>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TableBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Columns>1</imgui:Columns>
                          <imgui:Flags>None</imgui:Flags>
                          <imgui:OuterSize>
                            <imgui:X>0</imgui:X>
                            <imgui:Y>0</imgui:Y>
                          </imgui:OuterSize>
                          <imgui:InnerWidth>0</imgui:InnerWidth>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TableBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Columns>2</imgui:Columns>
                          <imgui:Flags>None</imgui:Flags>
                          <imgui:OuterSize>
                            <imgui:X>0</imgui:X>
                            <imgui:Y>0</imgui:Y>
                          </imgui:OuterSize>
                          <imgui:InnerWidth>0</imgui:InnerWidth>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>MoveLeft</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Move Left</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiManipulatorLeft" Category="UiControlManipulator" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorLeft</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>ForwardLeft</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Forward Left</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiManipulatorForwardLeft" Category="UiControlManipulator" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorForwardLeft</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>ForwardRight</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Forward Right</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiManipulatorForwardRight" Category="UiControlManipulator" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorForwardRight</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>Up</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Up</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiManipulatorUp" Category="UiControlManipulator" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorUp</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>MoveRight</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Move Right</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiManipulatorRight" Category="UiControlManipulator" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorRight</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>BackLeft</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Back Left</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiManipulatorBackLeft" Category="UiControlManipulator" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorBackLeft</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>BackRight</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Back Right</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiManipulatorBackRight" Category="UiControlManipulator" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorBackRight</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>Down</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Down</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiManipulatorDown" Category="UiControlManipulator" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorDown</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>STOP</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>STOP</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiManipulatorStop" Category="UiControlManipulator" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorStop</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>Home</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Home</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiManipulatorHome" Category="UiControlManipulator" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorHome</Name>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Name>Initialize</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Initialize</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiControlManipulator" Category="UiManipulatorInitialize" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiManipulatorInitialize</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TableBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Columns>2</imgui:Columns>
                          <imgui:Flags>None</imgui:Flags>
                          <imgui:OuterSize>
                            <imgui:X>0</imgui:X>
                            <imgui:Y>0</imgui:Y>
                          </imgui:OuterSize>
                          <imgui:InnerWidth>0</imgui:InnerWidth>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>x1: </imgui:Text>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="ManipulatorPositionSubject" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ManipulatorPosition</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0:F2}mm</Format>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Text" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>0.00mm</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>y1: </imgui:Text>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y1</Selector>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0:F2}mm</Format>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Text" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>0.00mm</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>y2: </imgui:Text>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y2</Selector>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0:F2}mm</Format>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Text" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>0.00mm</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>z: </imgui:Text>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Z</Selector>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0:F2}mm</Format>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Text" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>0.00mm</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>step: </imgui:Text>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>0.25mm</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="2" To="34" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="4" To="19" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="5" To="10" Label="Source1" />
                        <Edge From="5" To="14" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="9" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="18" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="13" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="18" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="17" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="18" Label="Source3" />
                        <Edge From="18" To="33" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="19" To="24" Label="Source1" />
                        <Edge From="19" To="28" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="23" Label="Source1" />
                        <Edge From="22" To="23" Label="Source2" />
                        <Edge From="23" To="32" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="27" Label="Source1" />
                        <Edge From="26" To="27" Label="Source2" />
                        <Edge From="27" To="32" Label="Source2" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="31" Label="Source1" />
                        <Edge From="30" To="31" Label="Source2" />
                        <Edge From="31" To="32" Label="Source3" />
                        <Edge From="32" To="33" Label="Source2" />
                        <Edge From="34" To="35" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="35" To="92" Label="Source1" />
                        <Edge From="36" To="37" Label="Source1" />
                        <Edge From="37" To="38" Label="Source1" />
                        <Edge From="37" To="77" Label="Source1" />
                        <Edge From="38" To="39" Label="Source1" />
                        <Edge From="39" To="40" Label="Source1" />
                        <Edge From="39" To="58" Label="Source1" />
                        <Edge From="40" To="41" Label="Source1" />
                        <Edge From="40" To="45" Label="Source1" />
                        <Edge From="40" To="49" Label="Source1" />
                        <Edge From="40" To="53" Label="Source1" />
                        <Edge From="41" To="42" Label="Source1" />
                        <Edge From="42" To="44" Label="Source1" />
                        <Edge From="43" To="44" Label="Source2" />
                        <Edge From="44" To="57" Label="Source1" />
                        <Edge From="45" To="46" Label="Source1" />
                        <Edge From="46" To="48" Label="Source1" />
                        <Edge From="47" To="48" Label="Source2" />
                        <Edge From="48" To="57" Label="Source2" />
                        <Edge From="49" To="50" Label="Source1" />
                        <Edge From="50" To="52" Label="Source1" />
                        <Edge From="51" To="52" Label="Source2" />
                        <Edge From="52" To="57" Label="Source3" />
                        <Edge From="53" To="54" Label="Source1" />
                        <Edge From="54" To="56" Label="Source1" />
                        <Edge From="55" To="56" Label="Source2" />
                        <Edge From="56" To="57" Label="Source4" />
                        <Edge From="57" To="76" Label="Source1" />
                        <Edge From="58" To="59" Label="Source1" />
                        <Edge From="58" To="63" Label="Source1" />
                        <Edge From="58" To="67" Label="Source1" />
                        <Edge From="58" To="71" Label="Source1" />
                        <Edge From="59" To="60" Label="Source1" />
                        <Edge From="60" To="62" Label="Source1" />
                        <Edge From="61" To="62" Label="Source2" />
                        <Edge From="62" To="75" Label="Source1" />
                        <Edge From="63" To="64" Label="Source1" />
                        <Edge From="64" To="66" Label="Source1" />
                        <Edge From="65" To="66" Label="Source2" />
                        <Edge From="66" To="75" Label="Source2" />
                        <Edge From="67" To="68" Label="Source1" />
                        <Edge From="68" To="70" Label="Source1" />
                        <Edge From="69" To="70" Label="Source2" />
                        <Edge From="70" To="75" Label="Source3" />
                        <Edge From="71" To="72" Label="Source1" />
                        <Edge From="72" To="74" Label="Source1" />
                        <Edge From="73" To="74" Label="Source2" />
                        <Edge From="74" To="75" Label="Source4" />
                        <Edge From="75" To="76" Label="Source2" />
                        <Edge From="76" To="91" Label="Source1" />
                        <Edge From="77" To="78" Label="Source1" />
                        <Edge From="77" To="82" Label="Source1" />
                        <Edge From="77" To="86" Label="Source1" />
                        <Edge From="78" To="79" Label="Source1" />
                        <Edge From="79" To="81" Label="Source1" />
                        <Edge From="80" To="81" Label="Source2" />
                        <Edge From="81" To="90" Label="Source1" />
                        <Edge From="82" To="83" Label="Source1" />
                        <Edge From="83" To="85" Label="Source1" />
                        <Edge From="84" To="85" Label="Source2" />
                        <Edge From="85" To="90" Label="Source2" />
                        <Edge From="86" To="87" Label="Source1" />
                        <Edge From="87" To="89" Label="Source1" />
                        <Edge From="88" To="89" Label="Source2" />
                        <Edge From="89" To="90" Label="Source3" />
                        <Edge From="90" To="91" Label="Source2" />
                        <Edge From="92" To="93" Label="Source1" />
                        <Edge From="93" To="94" Label="Source1" />
                        <Edge From="93" To="96" Label="Source1" />
                        <Edge From="93" To="104" Label="Source1" />
                        <Edge From="93" To="106" Label="Source1" />
                        <Edge From="93" To="112" Label="Source1" />
                        <Edge From="93" To="114" Label="Source1" />
                        <Edge From="93" To="120" Label="Source1" />
                        <Edge From="93" To="122" Label="Source1" />
                        <Edge From="93" To="128" Label="Source1" />
                        <Edge From="93" To="130" Label="Source1" />
                        <Edge From="94" To="95" Label="Source1" />
                        <Edge From="95" To="103" Label="Source1" />
                        <Edge From="96" To="102" Label="Source1" />
                        <Edge From="97" To="98" Label="Source1" />
                        <Edge From="98" To="99" Label="Source1" />
                        <Edge From="98" To="107" Label="Source1" />
                        <Edge From="98" To="115" Label="Source1" />
                        <Edge From="98" To="123" Label="Source1" />
                        <Edge From="99" To="100" Label="Source1" />
                        <Edge From="100" To="101" Label="Source1" />
                        <Edge From="101" To="102" Label="Source2" />
                        <Edge From="102" To="103" Label="Source2" />
                        <Edge From="104" To="105" Label="Source1" />
                        <Edge From="105" To="111" Label="Source1" />
                        <Edge From="106" To="110" Label="Source1" />
                        <Edge From="107" To="108" Label="Source1" />
                        <Edge From="108" To="109" Label="Source1" />
                        <Edge From="109" To="110" Label="Source2" />
                        <Edge From="110" To="111" Label="Source2" />
                        <Edge From="112" To="113" Label="Source1" />
                        <Edge From="113" To="119" Label="Source1" />
                        <Edge From="114" To="118" Label="Source1" />
                        <Edge From="115" To="116" Label="Source1" />
                        <Edge From="116" To="117" Label="Source1" />
                        <Edge From="117" To="118" Label="Source2" />
                        <Edge From="118" To="119" Label="Source2" />
                        <Edge From="120" To="121" Label="Source1" />
                        <Edge From="121" To="127" Label="Source1" />
                        <Edge From="122" To="126" Label="Source1" />
                        <Edge From="123" To="124" Label="Source1" />
                        <Edge From="124" To="125" Label="Source1" />
                        <Edge From="125" To="126" Label="Source2" />
                        <Edge From="126" To="127" Label="Source2" />
                        <Edge From="128" To="129" Label="Source1" />
                        <Edge From="129" To="132" Label="Source1" />
                        <Edge From="130" To="131" Label="Source1" />
                        <Edge From="131" To="132" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\InterSessionVisualizer.bonsai">
              <FrameSubject>InterSession</FrameSubject>
              <UiGiveLeft>UiGiveLeft</UiGiveLeft>
              <UiGiveRight>UiGiveRight</UiGiveRight>
              <UiMoveLeft>UiMoveLeft</UiMoveLeft>
              <UiMoveRight>UiMoveRight</UiMoveRight>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>