<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:imvizui="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers.Design"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:p3="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="imvizui:ImPlotVisualizerBuilder" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>0</cv:Index>
                <cv:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CameraFeed</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:CreateObservable">
              <Name>Camera1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFeed</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimeBase</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Camera1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>Camera2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFeed</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimeBase</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Camera2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TriggeredCamerasStream</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrialData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickLeft</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>S</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickRight</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0.1</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>-0.1</p1:Lower>
                <p1:Upper>0.1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BiasRandom</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.01S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.01</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>500</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>1</dsp:Max>
                <dsp:RangeMin>0</dsp:RangeMin>
                <dsp:RangeMax>0.05</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="DoubleProperty">
                <Value>3.14</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Sin" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(it +1) * 0.5</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateNullableBoolean">
                <p2:Value>false</p2:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.9</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateNullableBoolean">
                <p2:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item3 ?  Item2 : Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>500</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>1</dsp:Max>
                <dsp:RangeMin>0</dsp:RangeMin>
                <dsp:RangeMax>0.05</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Sin" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(it +1) * 0.5</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="IsRightChoice" Selector="Item3" />
                <Property Name="IsRewarded" Selector="Item5" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="PRewardLeft" Selector="Item2" />
                <Property Name="PRewardRight" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateNullableBoolean">
                <p2:Value>true</p2:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateNullableBoolean">
                <p2:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.05</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item3 ? Item1 : Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="IsAutoResponseRight" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:Trial">
                <p3:PRewardLeft>0.59164587077011477</p3:PRewardLeft>
                <p3:PRewardRight>0.40913708100521279</p3:PRewardRight>
                <p3:RewardConsumptionDuration>5</p3:RewardConsumptionDuration>
                <p3:RewardDelayDuration>0</p3:RewardDelayDuration>
                <p3:ResponseDeadlineDuration>5</p3:ResponseDeadlineDuration>
                <p3:QuiescencePeriodDuration>0.5</p3:QuiescencePeriodDuration>
                <p3:InterTrialIntervalDuration>5</p3:InterTrialIntervalDuration>
                <p3:IsAutoResponseRight xsi:nil="true" />
                <p3:LickspoutOffsetDelta>0</p3:LickspoutOffsetDelta>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Trial" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:TrialOutcome">
                <p3:IsRightChoice>false</p3:IsRightChoice>
                <p3:IsRewarded>false</p3:IsRewarded>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>SampleTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.151S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimedTrial</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimedTrial</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BiasRandom</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &gt; 1 ? 1 : it</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &lt; -1 ? -1 : it</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (it as Bias)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TimedBias</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="45" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="45" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="36" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="36" Label="Source3" />
            <Edge From="35" To="36" Label="Source2" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="45" Label="Source3" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="45" Label="Source4" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source5" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="45" To="47" Label="Source1" />
            <Edge From="45" To="59" Label="Source1" />
            <Edge From="46" To="64" Label="Source1" />
            <Edge From="47" To="62" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="52" To="57" Label="Source2" />
            <Edge From="53" To="57" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="57" Label="Source3" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source2" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source2" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="63" To="64" Label="Source2" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="66" Label="Source1" />
            <Edge From="66" To="68" Label="Source1" />
            <Edge From="67" To="68" Label="Source2" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="71" To="73" Label="Source1" />
            <Edge From="71" To="80" Label="Source1" />
            <Edge From="72" To="73" Label="Source2" />
            <Edge From="73" To="74" Label="Source1" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="76" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source1" />
            <Edge From="78" To="79" Label="Source1" />
            <Edge From="79" To="81" Label="Source1" />
            <Edge From="80" To="81" Label="Source2" />
            <Edge From="81" To="82" Label="Source1" />
            <Edge From="82" To="83" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\BiasVisualizer.bonsai">
        <FrameSubject>Frame</FrameSubject>
        <TimedBias>TimedBias</TimedBias>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>