WorkflowBuilder(Version=2.9.0)
GroupWorkflow CameraData
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> PublishSubject CameraFeed
    -> WorkflowOutput

    CreateObservable Camera1
        SubscribeSubject CameraFeed => #0
        SubscribeSubject TimeBase => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> Merge => #4
    StringProperty(Value=Camera1) => #5
    #4, #5 -> WithLatestFrom => #6
    CreateObservable Camera2
        SubscribeSubject CameraFeed => #0
        SubscribeSubject TimeBase => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> Merge => #8
    StringProperty(Value=Camera2) => #9
    #8, #9 -> WithLatestFrom => #10
    #6, #10 -> Merge
    -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
    -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

GroupWorkflow TrialData
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> Unit
    -> IncludeWorkflow TimeBase(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject LickLeft

    AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0)
    -> BehaviorSubject ManipulatorPosition

    DoubleProperty(Value=0)
    -> BehaviorSubject OffsetGain

    Timer(DueTime=PT1S)
    -> SelectMany
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2.855S)
        -> IntProperty(Value=0)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ResponsePeriod)
        -> MulticastSubject SoftwareEvent
        -> WorkflowOutput
    -> SelectMany
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.809S)
        -> IntProperty(Value=0)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RewardPeriod)
        -> MulticastSubject SoftwareEvent
        -> WorkflowOutput
    -> Delay(DueTime=PT2S)
    -> AindDynamicForagingDataSchema.TrialOutcome(IsRightChoice=nil, IsRewarded=false)
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialOutcome)
    -> MulticastSubject SoftwareEvent
    -> SelectMany
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2.887S)
        -> IntProperty(Value=0)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ITI)
        -> MulticastSubject SoftwareEvent
        -> WorkflowOutput
    -> Delay(DueTime=PT0S)
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Break)
    -> MulticastSubject SoftwareEvent
    -> Repeat

    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent => #20
    SubscribeSubject TimeBase => #21
    #20, #21 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
    -> Timestamp
    -> AllenNeuralDynamics.Core.Design.AccumulateToImmutableList
    -> BehaviorSubject SoftwareEventHistory

    Timer(DueTime=PT5S)
    -> StringProperty(Value=Expo)
    -> Take(Count=1)
    -> ToList
    -> InputMapping(Experimenter(Selector=it))
    -> AindDynamicForagingDataSchema.Session
      AindBehaviorServicesPkgVersion=0.13.5
      Version=0.13.5
      Experiment=Task6
      Date=0001-01-01T00:00:00.0000000+00:00
      SessionName=Stage1
      Subject=Plimbo
      AllowDirtyRepo=false
      SkipHardwareValidation=false
    -> Repeat => #34
    Bonsai.Windows.Input.KeyDown(Filter=M, SuppressRepetitions=false)
    -> StringProperty(Value=Expo)
    -> Take(Count=1)
    -> ToList
    -> InputMapping(Experimenter(Selector=it))
    -> AindDynamicForagingDataSchema.Session
      AindBehaviorServicesPkgVersion=0.13.5
      Version=0.13.5
      Experiment=Task7
      Date=0001-01-01T00:00:00.0000000+00:00
      SessionName=Stage2
      Subject=Plimbo
      AllowDirtyRepo=false
      SkipHardwareValidation=false
    -> Repeat => #41
    #34, #41 -> Merge
    -> BehaviorSubject SessionInfo

    StringProperty(Value=TimeElapsed) => #44
    Timer(DueTime=PT0S, Period=PT1S)
    -> FloatProperty(Value=1)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #48
      Expression: Convert.ToString(it)
    #44, #48 -> CombineLatest => #49
    StringProperty(Value=CurrentTrial) => #50
    SubscribeSubject TimedTrial
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #54
      Expression: Convert.ToString(it)
    #50, #54 -> CombineLatest => #55
    #49, #55 -> CombineLatest
    -> SelectMany
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #1, #2 -> Merge
        -> Take(Count=2)
        -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput
    -> AsObject
    -> BehaviorSubject SessionMetadata

    SubscribeSubject TimedTrial => #60
    SubscribeSubject BiasRandom => #61
    #60, #61 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Numerics.Distributions.Sample
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it > 1 ? 1 : it
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it < -1 ? -1 : it
    -> ElementIndex
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        it.Value as Bias,
        it.Index as TrialIndex
        )
    -> PublishSubject TrialIndexedBias

    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> Unit
    -> IncludeWorkflow TimeBase(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject LickRight

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.1, Upper=1)
    -> BehaviorSubject Random

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-0.1, Upper=0.1)
    -> BehaviorSubject BiasRandom

    Timer(DueTime=PT0S, Period=PT0.01S)
    -> DoubleProperty(Value=0.01)
    -> Accumulate
    -> PublishSubject TimeBase

    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5)) => #87
    Range(Start=0, Count=500)
    -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
    -> Add(Operand=DoubleProperty(Value=3.14))
    -> Bonsai.Numerics.Sin
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #92
      Expression: (it +1) * 0.5
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it
    -> InputMapping(Value(Selector=it))
    -> CreateNullableBoolean(Value=false) => #98
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.9)) => #101
    -> CreateNullableBoolean(Value=nil) => #102
    #98, #102, #101 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #104
      Expression: Item3 ?  Item2 : Item1
    Range(Start=0, Count=500)
    -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
    -> Bonsai.Numerics.Sin
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #108
      Expression: (it +1) * 0.5
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5)) => #111
    #87, #92, #104, #108, #111 -> Zip => #112
    -> InputMapping(IsRightChoice(Selector=Item3), IsRewarded(Selector=Item5)) => #113
    #112 -> InputMapping(PRewardLeft(Selector=Item2), PRewardRight(Selector=Item4)) => #114
    AindDynamicForagingDataSchema.Metadata(PRewardLeft=0.5, PRewardRight=0.5)
    -> PropertyMapping(Metadata) => #116
    #114, #116 -> AindDynamicForagingDataSchema.Trial
      PRewardLeft=0.59164587077011477
      PRewardRight=0.40913708100521279
      RewardConsumptionDuration=5
      RewardDelayDuration=0
      ResponseDeadlineDuration=5
      QuiescencePeriodDuration=0.5
      InterTrialIntervalDuration=5
      IsAutoRewardRight=nil
      LickspoutOffsetDelta=0
    -> PropertyMapping(Trial) => #118
    #113, #118 -> AindDynamicForagingDataSchema.TrialOutcome(IsRightChoice=false, IsRewarded=true)
    -> CreateObservable SampleTrial
        WorkflowInput Source1 => #0
        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #4
        #0, #4 -> Delay(DueTime=PT0.552S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat => #121
    SubscribeSubject TimeBase => #122
    #121, #122 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> BehaviorSubject TimedTrial
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5))
    -> InputMapping(Value(Selector=it))
    -> CreateNullableBoolean(Value=false) => #130
    -> CreateNullableBoolean(Value=nil) => #131
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.05)) => #134
    #131, #130, #134 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #136
      Expression: Item3 ? Item1 : Item2
    #112, #136 -> Zip
    -> MemberSelector(Selector=Item2)

GroupWorkflow Visualizer
    Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder
    -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
    -> PublishSubject Frame

    GroupWorkflow VisualizerStructure
        ExternalizedMapping(Name(DisplayName=FrameSubject))
        -> SubscribeSubject Frame => #1
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> TableBuilder => #3
          Visible=true
          Columns(ColumnStyling(Name=Ethograph, Flags=WidthStretch, InitValue=0), ColumnStyling(Name=Camera, Flags=WidthFixed, InitValue=320))
          Flags="BordersInnerH BordersOuterH BordersInnerV BordersOuterV BordersH BordersV BordersInner BordersOuter Borders SizingFixedFit"
          OuterSize(X=0, Y=0)
          InnerWidth=0
          ShowHeadersRow=true
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #5
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Behavior => #7
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Bias => #9
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Ethogram => #11
        #7, #9, #11 -> CombineLatest => #12
        #3 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Camera => #14
        #12, #14 -> CombineLatest
        #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=Borders, OuterSize(X=0, Y=0), InnerWidth=0)
        -> PublishSubject Metadata => #18
        #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TabBarBuilder(Visible=true, Flags=None) => #20
        -> Bonsai.ImGui.TabItemBuilder PreSession(Visible=true, Text=pre-session, Flags=None)
        -> PublishSubject PreSession => #22
        #20 -> Bonsai.ImGui.TabItemBuilder IntraSession(Visible=true, Text=intra-session, Flags=None)
        -> PublishSubject IntraSession => #24
        #18, #22, #24 -> CombineLatest

    IncludeWorkflow
      Path=Extensions\BehaviorVisualizer.bonsai
      PlotName=Behavior1
      LickLeftSubject=LickLeft
      LickRightSubject=LickRight
      TrialSubject=TimedTrial
      FrameSubject=Behavior

    IncludeWorkflow(Path=Extensions\BiasVisualizer.bonsai, FrameSubject=Bias, TimedBias=TrialIndexedBias)

    GroupWorkflow OutputControl
        PublishSubject<System.Single> UiHabituationTimeUpdate
        PublishSubject<System.Reactive.Unit> UiMoveLeft
        PublishSubject<System.Reactive.Unit> UiGiveRight
        PublishSubject<System.Reactive.Unit> UiGiveLeft
        PublishSubject<System.Reactive.Unit> UiMoveRight
        PublishSubject<System.Reactive.Unit> UiManipulatorLeft
        PublishSubject<System.Reactive.Unit> UiManipulatorForwardLeft
        PublishSubject<System.Reactive.Unit> UiManipulatorForwardRight
        PublishSubject<System.Reactive.Unit> UiManipulatorUp
        PublishSubject<System.Boolean> UiDrainLeft
        PublishSubject<System.Boolean> UiDrainBoth
        PublishSubject<System.Boolean> UiDrainRight
        PublishSubject<System.Reactive.Unit> UiManipulatorRight
        PublishSubject<System.Reactive.Unit> UiManipulatorBackRight
        PublishSubject<System.Reactive.Unit> UiManipulatorBackLeft
        PublishSubject<System.Reactive.Unit> UiManipulatorDown
        PublishSubject<System.Reactive.Unit> UiManipulatorStop
        PublishSubject<System.Reactive.Unit> UiManipulatorHome
        PublishSubject<System.Reactive.Unit> UiManipulatorInitialize

        BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut
        -> BehaviorSubject StartExperiment

        BehaviorSubject<System.Reactive.Unit> EndExperiment
        PublishSubject<System.Reactive.Unit> UiCueGiveRight
        PublishSubject<System.Reactive.Unit> UiCueGiveLeft
        PublishSubject<System.Boolean> UiKeepLeftOpen
        PublishSubject<System.Boolean> UiKeepRightOpen
        PublishSubject<System.Boolean> UiKeepBothOpen
        PublishSubject<System.Boolean> DrainLeftComplete
        PublishSubject<System.Boolean> DrainRightComplete

    SubscribeSubject Ethogram => #7
    SubscribeSubject SoftwareEventHistory
    -> PropertyMapping(SoftwareEvents) => #9
    #7, #9 -> SoftwareEventVisualizer
      Visible=true
      SoftwareEvents
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
      TrialBreakEventName=Break
      PlotHeight=200
      ShadedAreaPlotters
        ShadedAreaPlotter(EventName=TrialOutcome, Color=CornflowerBlue, Alpha=0.3)
        ShadedAreaPlotter(EventName=RewardPeriod, Color=Crimson, Alpha=0.3)
        ShadedAreaPlotter(EventName=ITI, Color=Cyan, Alpha=0.3)
      PointPlotters
        PointPlotter(EventName=TrialOutcome, Color=SaddleBrown, YPosition=0.5, MarkerSize=2, Marker=Circle)
        PointPlotter(EventName=LickLeft, Color=Red, YPosition=0.8, MarkerSize=2, Marker=Down)
        PointPlotter(EventName=LickRight, Color=DodgerBlue, YPosition=0.2, MarkerSize=2, Marker=Up)

    Unit => #11
    -> GroupWorkflow CameraPreviewVisualizer
        WorkflowInput Source1 => #0
        ExternalizedMapping(FrameSubject, CameraName, MinSaturation, MaxSaturation, FlipState, Rotation, TriggeredCamerasStream) => #1
        #0, #1 -> CreateObservable CameraPreview
            ExternalizedMapping(Name(DisplayName=FrameSubject))
            -> SubscribeSubject Camera
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
            -> PublishSubject Table

            ExternalizedMapping(Name(DisplayName=TriggeredCamerasStream))
            -> SubscribeSubject TriggeredCamerasStream => #5
            ExternalizedMapping(Value(DisplayName=CameraName)) => #6
            #5, #6 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=Camera1))
                -> WorkflowOutput
            -> Merge
            -> PublishSubject CameraStream

            SubscribeSubject Table
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #11
            SubscribeSubject CameraStream => #12
            SubscribeSubject EndExperiment => #13
            #12, #13 -> TakeUntil
            -> MemberSelector(Selector=Value) => #15
            ExternalizedMapping(Value(DisplayName=FlipState))
            -> IntProperty(Value=2) => #17
            #15, #17 -> WithLatestFrom => #18
            -> Condition Flipped => #19
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> LessThan(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #20
            #19 -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Mode) => #22
            #20, #22 -> Bonsai.Vision.Flip(Mode=Vertical) => #23
            #18 -> Condition NotFlipped
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> LessThan(Operand=IntProperty(Value=2))
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #25
            #23, #25 -> Merge => #26
            #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new (
                 it.Size.Width / 2 as X,
                 it.Size.Height / 2 as Y
                )
            -> InputMapping(X(Selector=X), Y(Selector=Y))
            -> Bonsai.Vision.CreatePoint2f(X=320, Y=240)
            -> PropertyMapping(Pivot) => #30
            ExternalizedMapping(Rotation) => #31
            #30, #31 -> Bonsai.Vision.AffineTransform(Pivot(X=320, Y=240), Translation(X=0, Y=0), Rotation=0, Scale(X=1, Y=1))
            -> PropertyMapping(Transform) => #33
            #26, #33 -> Bonsai.Vision.WarpAffine(Transform="1,0,0;0,1,0", Flags=Linear, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
            -> Bonsai.ImGui.Visualizers.SampleOnNewFrame Table
            -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #36
            SubscribeSubject OverlayAlpha
            -> PropertyMapping(Alpha) => #38
            ExternalizedMapping(MinSaturation, MaxSaturation) => #39
            #36, #38, #39 -> SaturationShaderPass(Alpha=0.476, MinSaturation=0.1, MaxSaturation=0.3)
            -> PropertyMapping(Image) => #41
            #11, #41 -> Bonsai.ImGui.ImageBuilder PreviewImage(Visible=true, ImageSize(X=320, Y=320), UV0(X=0, Y=0), UV1(X=1, Y=1)) => #42
            SubscribeSubject Table
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #47
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Alpha) => #49
            #47 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.SliderFloatBuilder(Visible=true, Min=0, Max=1, Flags=None, InitialValue=0.5)
            -> BehaviorSubject OverlayAlpha => #52
            #49, #52 -> CombineLatest => #53
            #42, #53 -> CombineLatest
        -> Switch
    #11 -> GroupWorkflow CameraPreviewVisualizer
        WorkflowInput Source1 => #0
        ExternalizedMapping(FrameSubject, CameraName, MinSaturation, MaxSaturation, FlipState, Rotation, TriggeredCamerasStream) => #1
        #0, #1 -> CreateObservable CameraPreview
            ExternalizedMapping(Name(DisplayName=FrameSubject))
            -> SubscribeSubject Camera
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
            -> PublishSubject Table

            ExternalizedMapping(Name(DisplayName=TriggeredCamerasStream))
            -> SubscribeSubject TriggeredCamerasStream => #5
            ExternalizedMapping(Value(DisplayName=CameraName)) => #6
            #5, #6 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=Camera2))
                -> WorkflowOutput
            -> Merge
            -> PublishSubject CameraStream

            SubscribeSubject Table
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #11
            SubscribeSubject CameraStream => #12
            SubscribeSubject EndExperiment => #13
            #12, #13 -> TakeUntil
            -> MemberSelector(Selector=Value) => #15
            ExternalizedMapping(Value(DisplayName=FlipState))
            -> IntProperty(Value=2) => #17
            #15, #17 -> WithLatestFrom => #18
            -> Condition Flipped => #19
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> LessThan(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #20
            #19 -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Mode) => #22
            #20, #22 -> Bonsai.Vision.Flip(Mode=Vertical) => #23
            #18 -> Condition NotFlipped
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> LessThan(Operand=IntProperty(Value=2))
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #25
            #23, #25 -> Merge => #26
            #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new (
                 it.Size.Width / 2 as X,
                 it.Size.Height / 2 as Y
                )
            -> InputMapping(X(Selector=X), Y(Selector=Y))
            -> Bonsai.Vision.CreatePoint2f(X=320, Y=240)
            -> PropertyMapping(Pivot) => #30
            ExternalizedMapping(Rotation) => #31
            #30, #31 -> Bonsai.Vision.AffineTransform(Pivot(X=320, Y=240), Translation(X=0, Y=0), Rotation=0, Scale(X=1, Y=1))
            -> PropertyMapping(Transform) => #33
            #26, #33 -> Bonsai.Vision.WarpAffine(Transform="1,0,0;0,1,0", Flags=Linear, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
            -> Bonsai.ImGui.Visualizers.SampleOnNewFrame Table
            -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #36
            SubscribeSubject OverlayAlpha
            -> PropertyMapping(Alpha) => #38
            ExternalizedMapping(MinSaturation, MaxSaturation) => #39
            #36, #38, #39 -> SaturationShaderPass(Alpha=0.371, MinSaturation=0.1, MaxSaturation=0.3)
            -> PropertyMapping(Image) => #41
            #11, #41 -> Bonsai.ImGui.ImageBuilder PreviewImage(Visible=true, ImageSize(X=320, Y=320), UV0(X=0, Y=0), UV1(X=1, Y=1)) => #42
            SubscribeSubject Table
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #47
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Alpha) => #49
            #47 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.SliderFloatBuilder(Visible=true, Min=0, Max=1, Flags=None, InitialValue=0.5)
            -> BehaviorSubject OverlayAlpha => #52
            #49, #52 -> CombineLatest => #53
            #42, #53 -> CombineLatest
        -> Switch

    SubscribeSubject SessionInfo => #14
    AindDynamicForagingDataSchema.AindDynamicForagingTaskLogic(Name=AindDynamicForaging, Version=0.0.2-rc37, StageName=Task6) => #15
    #14, #15 -> WithLatestFrom
    -> IncludeWorkflow
      Path=Extensions\MetadataVisualizer.bonsai
      FrameSubject=Metadata
      StartExperimentSubject=StartExperimentShortcut
      UiHabituationTimeUpdate=UiHabituationTimeUpdate

    IncludeWorkflow
      Path=Extensions\PreSessionVisualizer.bonsai
      FrameSubject=PreSession
      UiKeepLeftOpne=UiKeepLeftOpen
      UiKeepRightOpen=UiKeepRightOpen
      UiKeepBothOpen=UiKeepBothOpen
      UiDrainLeft=UiDrainLeft
      UiDrainRight=UiDrainRight
      UiDrainBoth=UiDrainBoth
      UiManipulatorLeft=UiManipulatorLeft
      UiManipulatorForwardLeft=UiManipulatorForwardLeft
      UiManipulatorForwardRight=UiManipulatorForwardRight
      UiManipulatorUp=UiManipulatorUp
      UiManipulatorRight=UiManipulatorRight
      UiManipulatorBackLeft=UiManipulatorBackLeft
      UiManipulatorBackRight=UiManipulatorBackRight
      UiManipulatorDown=UiManipulatorDown
      UiManipulatorStop=UiManipulatorStop
      UiManipulatorHome=UiManipulatorHome
      UiControlManipulator=UiManipulatorInitialize
      DrainLeftComplete=DrainLeftComplete
      DrainRightComplete=DrainRightComplete

    IncludeWorkflow
      Path=Extensions\IntraSessionVisualizer.bonsai
      FrameSubject=IntraSession
      UiGiveLeft=UiGiveLeft
      UiGiveRight=UiGiveRight
      UiMoveLeft=UiMoveLeft
      UiMoveRight=UiMoveRight
      StartExperimentSubject=StartExperiment
      UiCueGiveLeft=UiCueGiveLeft
      UiCueGiveRight=UiCueGiveRight
      SessionMetadataSubject=SessionMetadata
